OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = .5
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 58
  High Cut-off Frequency (Hz) = 62
  Band Pass Ripple (dB) = 0.5
Data=#2, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/PAIN-[$core{date}-$core{time}].gdf
#0.Stimulations -> Stimulation listener
  Log level to use = Information
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> TCP Writer
  Port = 5678
  Output format = Raw
