OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.500000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Data=#1, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/PAIN-[$core{date}-$core{time}].gdf
#0.Stimulations -> Stimulation listener
  Log level to use = Information
